CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

LoadData:[module_num:1|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Input data file location:Elsewhere...|
    Name of the file:load_data.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
    Rows to process:1,100000
    Group images by metadata?:No
    Select metadata tags for grouping:
    Rescale intensities?:No

IdentifyPrimaryObjects:[module_num:2|svn_version:'Unknown'|variable_revision_number:15|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Minimum Cross-Entropy

MeasureObjectIntensity:[module_num:3|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:DNA
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:4|svn_version:'Unknown'|variable_revision_number:3|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayOutlines:[module_num:5|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:NucleiOverlay
    Outline display mode:Color
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
    Select outline color:Green
    Select objects to display:Nuclei

SaveImages:[module_num:6|svn_version:'Unknown'|variable_revision_number:16|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
    Select method for constructing file names:Single name
    Select image name for file prefix:DNA
    Enter single file name:\g<Sample>_nuclei
    Number of digits:4
    Append a suffix to the image file name?:No
    Text to append to the image name:_nuclei
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)
    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:7|svn_version:'Unknown'|variable_revision_number:13|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
    Select source of sample row name:Metadata
    Select the image to use as the identifier:None
    Select the metadata to use as the identifier:None
    Export all measurement types?:Yes
    Press button to select measurements:
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Do not use
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:Yes
